PsychoPy2experiment version="2024.2.4"
Settings
  expName = categorizacion_emocional
  Audio lib = ptb
  runMode = False
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1920,1080]
  Units = height
  color = -1.0000, -1.0000, -1.0000
  frameRateMsg = Se está intentando medir la frecuencia de fotogramas de la pantalla, por favor, espere...
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = ioHub
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Routines
  Routine instrucciones
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    TextComponent instructioness_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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      text:
        Bienvenido/a a esta tarea.

        En cada ensayo verás una fotografía de un rostro.
        Tu tarea es identificar la emoción que expresa esa persona
        lo más rápido y con la mayor precisión posible.

        Usa las siguientes teclas para responder:

        F  →  Alegría
        G  →  Tristeza
        H  →  Ira
        J  →  Miedo

        Mantén los dedos sobre esas teclas durante toda la tarea.

        Cuando estés listo/a, presiona la barra espaciadora para comenzar la práctica.
    KeyboardComponent key_resp
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine practica
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    PolygonComponent fix_cross_practice
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      fillColor = white
      size = (0.05, 0.05)
      shape = cross
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    TextComponent palabra_txt
      startVal [time (s)] = 0.5
      letterHeight = 0.08
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      text [set every repeat]:
        $palabra_p
    KeyboardComponent key_resp_practice
      startVal [time (s)] = 0.5
      forceEndRoutine = True
      allowedKeys = 'f', 'g', 'h', 'j'
      storeCorrect = True
      correctAns = $tecla_correcta_p
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  Routine fin_experimento
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    TextComponent fin_experimento_txt
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      letterHeight = 0.05
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      text:
        La tarea ha finalizado

        Gracias por tu participación
  Routine descanso
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    TextComponent descanso_txt
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      letterHeight = 0.05
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      text:
        Fase de descanso
  Routine experimental
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    PolygonComponent fix_cross_experimental
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      fillColor = white
      size = (0.05, 0.05)
      shape = cross
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    ImageComponent imagen_experiemental
      startVal [time (s)] = 0.5
      image [set every repeat] = $imagen
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    KeyboardComponent key_resp_experimental
      startVal [time (s)] = 0.5
      forceEndRoutine = True
      allowedKeys = 'f', 'g', 'h', 'j'
      storeCorrect = True
      correctAns = $tecla_correcta
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  Routine inicio_practica
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    TextComponent inicio_fase_practica_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        A continuación realizarás algunos ensayos de práctica.

        Verás palabras en pantalla. Presiona la tecla que corresponde a cada emoción:

        F  →  Alegría
        G  →  Tristeza
        H  →  Ira
        J  →  Miedo

        Después de cada respuesta verás si fue correcta o incorrecta.

        Presiona la barra espaciadora para iniciar.
    KeyboardComponent key_resp_2
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine feedback_practica
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        mensaje_feedback = ""
        if key_resp_practice.corr == 1:
            mensaje_feedback = "¡Correcto!"
        else:
            mensaje_feedback = "Incorrecto"
    TextComponent feedback_txt
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $mensaje_feedback
      letterHeight = 0.07
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  Routine fin_practica
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    TextComponent fin_fase_practica_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        La práctica ha terminado.

        A continuación verás fotografías de rostros en lugar de palabras.

        Ya no recibirás retroalimentación sobre tus respuestas.
    KeyboardComponent key_resp_3
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine inicio_experimental
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    TextComponent inicio_fase_experimental_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Recuerda:

        F  →  Alegría
        G  →  Tristeza
        H  →  Ira
        J  →  Miedo

        Responde lo más rápido y con la mayor precisión posible.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_4
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine ITI
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    TextComponent iti_txt
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      letterHeight = 0.05
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Flow
  Routine instrucciones
  Routine inicio_practica
  LoopInitiator loop_practica loopType="TrialHandler"
    loopType = random
    conditionsFile = conditions/condiciones_practica.xlsx
    nReps = 1
    conditions = [{"id_p":1,"palabra_p":"ALEGRÍA","emocion_p":"alegria","tecla_correcta_p":"f"},{"id_p":2,"palabra_p":"ALEGRÍA","emocion_p":"alegria","tecla_correcta_p":"f"},{"id_p":3,"palabra_p":"ALEGRÍA","emocion_p":"alegria","tecla_correcta_p":"f"},{"id_p":4,"palabra_p":"TRISTEZA","emocion_p":"tristeza","tecla_correcta_p":"g"},{"id_p":5,"palabra_p":"TRISTEZA","emocion_p":"tristeza","tecla_correcta_p":"g"},{"id_p":6,"palabra_p":"TRISTEZA","emocion_p":"tristeza","tecla_correcta_p":"g"},{"id_p":7,"palabra_p":"IRA","emocion_p":"ira","tecla_correcta_p":"h"},{"id_p":8,"palabra_p":"IRA","emocion_p":"ira","tecla_co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
    endPoints = [0,1]
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    Routine practica
    Routine feedback_practica
  LoopTerminator loop_practica
  Routine fin_practica
  Routine descanso
  Routine inicio_experimental
  LoopInitiator loop_experimental loopType="TrialHandler"
    loopType = random
    conditionsFile = conditions/condiciones_experimental.xlsx
    nReps = 1
    conditions = [{"id":1,"imagen":"media/anger/anger_01.png","emocion":"ira","tecla_correcta":"h"},{"id":2,"imagen":"media/anger/anger_02.png","emocion":"ira","tecla_correcta":"h"},{"id":3,"imagen":"media/anger/anger_03.png","emocion":"ira","tecla_correcta":"h"},{"id":4,"imagen":"media/anger/anger_04.png","emocion":"ira","tecla_correcta":"h"},{"id":5,"imagen":"media/anger/anger_05.png","emocion":"ira","tecla_correcta":"h"},{"id":6,"imagen":"media/anger/anger_06.png","emocion":"ira","tecla_correcta":"h"},{"id":7,"imagen":"media/anger/anger_07.png","emocion":"ira","tecla_correcta":"h"},{"id":8,"imagen":"media/a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
    endPoints = [0,1]
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    Routine experimental
    Routine ITI
  LoopTerminator loop_experimental
  Routine fin_experimento
